OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition or 4-online and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal filter - GPL => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter
  Spatial Fitler Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  0x8d21ff41 = ${Path_Samples}/bci/motor-imagery-CSP/csp-spatial-filter.cfg
-> Signal average
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
