OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  note: the recorded files go to the
  ${Path_Samples}/signals folder.
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visulization
  box for feedback !

  In order to display correct feedback,
  the Graz Visulization box expects a negative
  value for one class and a positive value for the other
  class. So for instance, if you want to replace the LDA
  with a SVM classifier, you will have to shift the value by -0.5
  with the simple DSP. Indeed, SVM outputs values from 0 to 1.

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
