OpenViBE-Scenario
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main difference between this scenario and
  scenario 3-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 3-online for
  details about the processing.

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/motor-imagery/motor-imagery-bci-config-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
#11.Classification state -> Simple DSP
  Equation = x
#11.Classification state -> Analog VRPN Server
  Peripheral name = openvibe-vrpn

Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Classifier processor
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/motor-imagery/motor-imagery-bci-config-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right

Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_GDF_Left
  Button 1 OFF = OVTK_GDF_Right
