OpenViBE-Scenario
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Signal Display box displays
  the content of the file.

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Signal average
-> Simple DSP
  Equation = x
-> 0xc67a01dc Analog VRPN Server
  Peripheral name = openvibe-vrpn
