OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

  Note: in order to run this scenario,
  the spatial filter should have been trained using
  2-train-xDAWN !

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller-xDAWN/p300-spatial-filter.cfg
-> Signal average
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
